<?xml version="1.0" encoding="UTF-8" standalone="no"?>
<batch mzmine_version="4.8.5">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" module_name="Import MS data" parameter_version="1">
        <parameter name="File names">
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A1_BETA-NICOTINAMIDE_ADENINE_DINUCLEOTIDE_02.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A1_BETA-NICOTINAMIDE_ADENINE_DINUCLEOTIDE_02.mzXML</file>
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A1_DEOXYADENOSINE.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A1_DEOXYADENOSINE.mzXML</file>
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A1_DIAMINOPIMELATE.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A1_DIAMINOPIMELATE.mzXML</file>
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A1_PUTRESCINE.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A1_PUTRESCINE.mzXML</file>
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A1-2-METHOXYESTRONE.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A1-2-METHOXYESTRONE.mzXML</file>
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A2_AMINOADIPATE.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A2_AMINOADIPATE.mzXML</file>
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A2_GLUTAMINE_02.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A2_GLUTAMINE_02.mzXML</file>
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\detected_mzXML\A2_N-ACETYLPUTRESCINE.mzXML">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\detected_mzXML\A2_N-ACETYLPUTRESCINE.mzXML</file>
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        </parameter>
        <parameter name="Try vendor centroiding">true</parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="false"/>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files">
            <file relative_path="..\..\..\..\..\250115_Metabolite Homemade Database\260225_Database library v4 msp.msp">C:\Users\terrac\Documents\Thèse\Manips\250115_Metabolite Homemade Database\260225_Database library v4 msp.msp</file>
        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>25.02</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">1000000.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" module_name="Mass detection" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>25.02</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS2, level = 2">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">5000.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" module_name="Chromatogram builder" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>25.02</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">4</parameter>
        <parameter name="Minimum intensity for consecutive scans">0.0</parameter>
        <parameter name="Minimum absolute height">1000000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" module_name="Local minimum feature resolver" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">resolved</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>8.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.2</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="false">
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            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.8</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.04</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">1000000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.75</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>1.0</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" module_name="13C isotope filter (formerly: isotope grouper)" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>8.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">3</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">0.2-16min</parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Minimum aligned samples" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="true">
            <min>0.2</min>
            <max>16.0</max>
        </parameter>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">true</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_append_rows.MergeAlignerModule" module_name="Merge lists" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Merged feature list</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" module_name="Feature list rows filter" parameter_version="3">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">0.2-16min</parameter>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Minimum aligned samples" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in any group)" selected="false">
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        </parameter>
        <parameter name="Minimum aligned samples (in one group)" selected="false">
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        </parameter>
        <parameter name="RSD filter" selected="false">
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        </parameter>
        <parameter name="Significance/fold-change filter" selected="false">
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        </parameter>
        <parameter name="Minimum signals in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="true">
            <min>0.2</min>
            <max>16.02</max>
        </parameter>
        <parameter name="Chromatographic width" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Flexible filter (e.g., annotation)" selected="false">
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        </parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Require MS2 scan">false</parameter>
        <parameter name="Require other detector correlation">false</parameter>
        <parameter name="Never remove rows with MS2">false</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the row ID">true</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.id_spectral_library_match.SpectralLibrarySearchModule" module_name="Spectral library search" parameter_version="3">
        <parameter name="Spectral libraries" type="ALL_IMPORTED"/>
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Merge &amp; select fragment scans" selected_item="simple_merged">
            <module name="simple_merged">
                <parameter name="Presets">representative_scans</parameter>
                <parameter name="Merging m/z tolerance">
                    <absolutetolerance>0.0015</absolutetolerance>
                    <ppmtolerance>10.0</ppmtolerance>
                </parameter>
            </module>
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        </parameter>
        <parameter name="MS level filter" selected="MS2, level = 2">3</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">true</parameter>
        <parameter name="Minimum  matched signals">4</parameter>
        <parameter name="Similarity" selected_item="Weighted cosine similarity">
            <module name="Weighted cosine similarity">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.7</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
        <parameter name="Advanced" selected="false">
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        </parameter>
    </batchstep>
</batch>
